OpenViBE-Scenario(FormatVersion=1, Creator=OpenVIBE, CreatorVersion=0.2.99)
0x4c536d0a = /home/ceriou/workspace/certivibe/plugins/processing/signal-processing/box-tutorials/channel-selector.mxs
Comment
  The Sinus Oscillator box generates
  a 4 channels sinusoidal signal
Comment
  Those 4 channels are displayed in the left
  Continuous Oscilloscope box
Comment
  The Channel Selector box takes only
  the first and fourth channel
Comment
  Finally, the right Continuous Oscilloscope box
  displays the 2 selected channels
Comment
  You can browse each box' documentation by selecting the box and pressing F1

Sinus oscillator => #0
  Channel count = 4
  Sampling frequency = 512
  Generated epoch sample count = 32
Matrix=#0 -> Continuous Oscilloscope - All Channels
  Channel Localisation = ${AdvancedViz_ChannelLocalisation}
  Temporal Coherence = Time Locked
  Time Scale = 20
  Matrix Count = 50
  Positive Data Only ? = false
  Gain = 0.1
  Caption =
  Translucency = 1
  Color = ${AdvancedViz_DefaultColor}
#0 -> Channel Selector => #2
  Channel List = 1;4
  Action = Select
  Channel Matching Method = Smart
Matrix=#2 -> Continuous Oscilloscope - 1st and 4th
  Channel Localisation = ${AdvancedViz_ChannelLocalisation}
  Temporal Coherence = Time Locked
  Time Scale = 20
  Matrix Count = 50
  Positive Data Only ? = false
  Gain = 0.1
  Caption =
  Translucency = 1
  Color = ${AdvancedViz_DefaultColor}
