OpenViBE-Scenario
Comment
  The Hilbert transform computes Hilbert transform,
  instantaneous phase and envelope on input signal
  using analytic signal representation
Comment
  The Time signal is a sample box
  that generates a constant increasing signal
Comment
  The Simple DSP box is used to
  create a modulated signal
Comment
  Compute Hilbert transform
  on the modulated signal
Comment
  Display results
Comment
  You can browse each box' documentation by selecting the box and pressing F1

Time signal
  Sampling frequency = 512
  Generated epoch sample count = 32
-> Simple DSP "cos(100*x)*(4*cos(2*x)-sin(3*x))" => #1
  Equation = cos(100*x)*(4*cos(2*x)-sin(3*x))
Matrix=#1 -> Display modulated signal
  Channel Localisation = ${AdvancedViz_ChannelLocalisation}
  Temporal Coherence = Time Locked
  Time Scale = 20
  Matrix Count = 50
  Positive Data Only ? = false
  Gain = 1
  Caption =
  Translucency = 1
  Color = ${AdvancedViz_DefaultColor}
#1 -> Hilbert Transform => #3
Matrix=#3.Hilbert Transform -> 0xc67a01dc Hilbert Signal
  Channel Localisation = ${AdvancedViz_ChannelLocalisation}
  Temporal Coherence = Time Locked
  Time Scale = 20
  Matrix Count = 50
  Positive Data Only ? = false
  Gain = 1
  Caption =
  Translucency = 1
  Color = ${AdvancedViz_DefaultColor}
Matrix=#3.Envelope -> Envelope
  Channel Localisation = ${AdvancedViz_ChannelLocalisation}
  Temporal Coherence = Time Locked
  Time Scale = 20
  Matrix Count = 50
  Positive Data Only ? = false
  Gain = 1
  Caption =
  Translucency = 1
  Color = ${AdvancedViz_DefaultColor}
Matrix=#3.Phase -> Phase
  Channel Localisation = ${AdvancedViz_ChannelLocalisation}
  Temporal Coherence = Time Locked
  Time Scale = 20
  Matrix Count = 50
  Positive Data Only ? = false
  Gain = 1
  Caption =
  Translucency = 1
  Color = ${AdvancedViz_DefaultColor}
