OpenViBE-Scenario
Comment
  The Lua Stimulator box delays muxes the stimulations
  from the Clock Stimulator and the Keyboard Stimulator
  boxes. Each muxed stimulation is delayed by 5 seconds.
Comment
  You can browse each box' documentation by selecting the box and pressing F1

0xc67a01dc Sinus oscillator => #0
  Channel count = 4
  Sampling frequency = 512
  Generated epoch sample count = 32
Clock stimulator => #1
  Interstimulation interval (in sec) = 1.0
  Stimulation = OVTK_StimulationId_Label_00
Keyboard stimulator => #2
  Filename = ${Path_Data}/plugins/stimulation/simple-keyboard-to-stimulations.txt
New input[0]=#1, New input[1]=#2 -> Mux + 5s delay => #3
  Lua Script = ${__volatile_ScenarioDir}/scripts/sample-lua-script.lua
Matrix=#0, Markers=#3 -> Continuous Oscilloscope
  Channel Localisation = ${AdvancedViz_ChannelLocalisation}
  Temporal Coherence = Time Locked
  Time Scale = 20
  Matrix Count = 50
  Positive Data Only ? = false
  Gain = 1
  Caption =
  Translucency = 1
  Color = ${AdvancedViz_DefaultColor}
