OpenViBE-Scenario
Comment
  Then the Keyboard Stimulator box
  is used to generate triggers that we will use
  to know when to run a command.
Comment
  The Run Command box
  launches a web browser each  time
  a stimulation is received. This box
  can be used to launch whatever
  command most fits your needs.
Comment
  You can browse each box' documentation by selecting the box and pressing F1

Keyboard stimulator
  Filename = ${Player_ScenarioDirectory}/display-cue-image-keyboard-stimulator.txt
-> 0xc67a01dc Run Command
  Stimulation 1 = OVTK_StimulationId_Label_00
  Command 1 = xdg-open http://mensiatech.com &
  Stimulation 2 = OVTK_StimulationId_Label_00
  Command 2 = START http://mensiatech.com
