OpenViBE-Scenario
Comment
  Sinus oscillator generates 2 channels of signal.
  The signal is filtered for simplification.
Comment
  A DSP box is used in combination with the
  Sign Change Detector to create a threshold detector.
Comment
  The Sign Change Detector takes sends stimulations
  when the signal on selected channel (0 in this case) becomes
  positive or negative.
Comment
  You can browse each box' documentation by selecting the box and pressing F1

Sinus oscillator
  Channel count = 2
  Sampling frequency = 256
  Generated epoch sample count = 32
-> Temporal filter
  Filter method = Butterworth
  Filter type = Band stop
  Filter order = 4
  Low cut frequency (Hz) = 8
  High cut frequency (Hz) = 20
  Pass band ripple (dB) = 0.5
-> Simple DSP => #2
  Equation = x-1.5
-> Sign Change Detector => #3
  On Stimulation = OVTK_StimulationId_Label_01
  Off Stimulation = OVTK_StimulationId_Label_00
  Channel Index = 0
Matrix=#2, Markers=#3 -> 0xc67a01dc Continuous Oscilloscope
  Channel Localisation = ${AdvancedViz_ChannelLocalisation}
  Temporal Coherence = Time Locked
  Time Scale = 20
  Matrix Count = 50
  Positive Data Only ? = false
  Gain = 1
  Caption =
  Translucency = 1
  Color = ${AdvancedViz_DefaultColor}
