<OpenViBE-Scenario>
	<FormatVersion>2</FormatVersion>
	<Creator>OpenViBE Designer</Creator>
	<CreatorVersion>3.2.0</CreatorVersion>
	<Settings></Settings>
	<Inputs></Inputs>
	<Outputs></Outputs>
	<Boxes>
		<Box>
			<Identifier>(0x000046ff, 0x00004b04)</Identifier>
			<Name>Clock stimulator</Name>
			<AlgorithmClassIdentifier>(0x4f756d3f, 0x29ff0b96)</AlgorithmClassIdentifier>
			<Outputs>
				<Output>
					<TypeIdentifier>(0x6f752dd0, 0x082a321e)</TypeIdentifier>
					<Name>Generated stimulations</Name>
				</Output>
			</Outputs>
			<Settings>
				<Setting>
					<TypeIdentifier>(0x512a166f, 0x5c3ef83f)</TypeIdentifier>
					<Name>Interstimulation interval (in sec)</Name>
					<DefaultValue>1.0</DefaultValue>
					<Value>1.0</Value>
					<Modifiability>false</Modifiability>
				</Setting>
				<Setting>
					<TypeIdentifier>(0x2c132d6e, 0x44ab0d97)</TypeIdentifier>
					<Name>Stimulation</Name>
					<DefaultValue>OVTK_StimulationId_Label_00</DefaultValue>
					<Value>OVTK_StimulationId_Label_00</Value>
					<Modifiability>false</Modifiability>
				</Setting>
			</Settings>
			<Attributes>
				<Attribute>
					<Identifier>(0x1fa7a38f, 0x54edbe0b)</Identifier>
					<Value>480</Value>
				</Attribute>
				<Attribute>
					<Identifier>(0x207c9054, 0x3c841b63)</Identifier>
					<Value>912</Value>
				</Attribute>
				<Attribute>
					<Identifier>(0x4e7b798a, 0x183beafb)</Identifier>
					<Value>(0x27b3ee3c, 0xc50527e6)</Value>
				</Attribute>
				<Attribute>
					<Identifier>(0xc80ce8af, 0xf699f813)</Identifier>
					<Value>1</Value>
				</Attribute>
				<Attribute>
					<Identifier>(0xce18836a, 0x9c0eb403)</Identifier>
					<Value>2</Value>
				</Attribute>
			</Attributes>
		</Box>
		<Box>
			<Identifier>(0x000046ff, 0x00004b05)</Identifier>
			<Name>Clock stimulator</Name>
			<AlgorithmClassIdentifier>(0x4f756d3f, 0x29ff0b96)</AlgorithmClassIdentifier>
			<Outputs>
				<Output>
					<TypeIdentifier>(0x6f752dd0, 0x082a321e)</TypeIdentifier>
					<Name>Generated stimulations</Name>
				</Output>
			</Outputs>
			<Settings>
				<Setting>
					<TypeIdentifier>(0x512a166f, 0x5c3ef83f)</TypeIdentifier>
					<Name>Interstimulation interval (in sec)</Name>
					<DefaultValue>1.0</DefaultValue>
					<Value>2.000000</Value>
					<Modifiability>false</Modifiability>
				</Setting>
				<Setting>
					<TypeIdentifier>(0x2c132d6e, 0x44ab0d97)</TypeIdentifier>
					<Name>Stimulation</Name>
					<DefaultValue>OVTK_StimulationId_Label_00</DefaultValue>
					<Value>OVTK_StimulationId_Label_01</Value>
					<Modifiability>false</Modifiability>
				</Setting>
			</Settings>
			<Attributes>
				<Attribute>
					<Identifier>(0x1fa7a38f, 0x54edbe0b)</Identifier>
					<Value>480</Value>
				</Attribute>
				<Attribute>
					<Identifier>(0x207c9054, 0x3c841b63)</Identifier>
					<Value>1072</Value>
				</Attribute>
				<Attribute>
					<Identifier>(0x4e7b798a, 0x183beafb)</Identifier>
					<Value>(0x27b3ee3c, 0xc50527e6)</Value>
				</Attribute>
				<Attribute>
					<Identifier>(0xc80ce8af, 0xf699f813)</Identifier>
					<Value>1</Value>
				</Attribute>
				<Attribute>
					<Identifier>(0xce18836a, 0x9c0eb403)</Identifier>
					<Value>2</Value>
				</Attribute>
			</Attributes>
		</Box>
		<Box>
			<Identifier>(0x000050a2, 0x00006fea)</Identifier>
			<Name>Player Controller</Name>
			<AlgorithmClassIdentifier>(0x5f426dce, 0x08456e13)</AlgorithmClassIdentifier>
			<Inputs>
				<Input>
					<TypeIdentifier>(0x6f752dd0, 0x082a321e)</TypeIdentifier>
					<Name>Stimulations</Name>
				</Input>
			</Inputs>
			<Settings>
				<Setting>
					<TypeIdentifier>(0x2c132d6e, 0x44ab0d97)</TypeIdentifier>
					<Name>Stimulation name</Name>
					<DefaultValue>OVTK_StimulationId_Label_00</DefaultValue>
					<Value>OVTK_StimulationId_Label_00</Value>
					<Modifiability>false</Modifiability>
				</Setting>
				<Setting>
					<TypeIdentifier>(0xcc14d8d6, 0xf27ecb73)</TypeIdentifier>
					<Name>Action to perform</Name>
					<DefaultValue>Pause</DefaultValue>
					<Value>Stop</Value>
					<Modifiability>false</Modifiability>
				</Setting>
			</Settings>
			<Attributes>
				<Attribute>
					<Identifier>(0x1fa7a38f, 0x54edbe0b)</Identifier>
					<Value>560</Value>
				</Attribute>
				<Attribute>
					<Identifier>(0x207c9054, 0x3c841b63)</Identifier>
					<Value>1216</Value>
				</Attribute>
				<Attribute>
					<Identifier>(0x4e7b798a, 0x183beafb)</Identifier>
					<Value>(0x568d148e, 0x650792b3)</Value>
				</Attribute>
				<Attribute>
					<Identifier>(0xce18836a, 0x9c0eb403)</Identifier>
					<Value>2</Value>
				</Attribute>
				<Attribute>
					<Identifier>(0xcfad85b0, 0x7c6d841c)</Identifier>
					<Value>1</Value>
				</Attribute>
			</Attributes>
		</Box>
		<Box>
			<Identifier>(0x00005426, 0x00000594)</Identifier>
			<Name>Stimulation multiplexer</Name>
			<AlgorithmClassIdentifier>(0x07db4efa, 0x472b0938)</AlgorithmClassIdentifier>
			<Inputs>
				<Input>
					<TypeIdentifier>(0x6f752dd0, 0x082a321e)</TypeIdentifier>
					<Name>Input stimulations 1</Name>
				</Input>
				<Input>
					<TypeIdentifier>(0x6f752dd0, 0x082a321e)</TypeIdentifier>
					<Name>Input stimulations 2</Name>
				</Input>
			</Inputs>
			<Outputs>
				<Output>
					<TypeIdentifier>(0x6f752dd0, 0x082a321e)</TypeIdentifier>
					<Name>Multiplexed stimulations</Name>
				</Output>
			</Outputs>
			<Attributes>
				<Attribute>
					<Identifier>(0x1fa7a38f, 0x54edbe0b)</Identifier>
					<Value>560</Value>
				</Attribute>
				<Attribute>
					<Identifier>(0x207c9054, 0x3c841b63)</Identifier>
					<Value>992</Value>
				</Attribute>
				<Attribute>
					<Identifier>(0x4e7b798a, 0x183beafb)</Identifier>
					<Value>(0xe7af82cd, 0x14edb4d4)</Value>
				</Attribute>
				<Attribute>
					<Identifier>(0xc80ce8af, 0xf699f813)</Identifier>
					<Value>1</Value>
				</Attribute>
				<Attribute>
					<Identifier>(0xcfad85b0, 0x7c6d841c)</Identifier>
					<Value>2</Value>
				</Attribute>
				<Attribute>
					<Identifier>(0xfba64161, 0x65304e21)</Identifier>
					<Value></Value>
				</Attribute>
			</Attributes>
		</Box>
		<Box>
			<Identifier>(0x00006d4d, 0x00002b7a)</Identifier>
			<Name>Timeout</Name>
			<AlgorithmClassIdentifier>(0x24fcd292, 0x5c8f6aa8)</AlgorithmClassIdentifier>
			<Inputs>
				<Input>
					<TypeIdentifier>(0x544a003e, 0x6dcba5f6)</TypeIdentifier>
					<Name>Input Stream</Name>
				</Input>
			</Inputs>
			<Outputs>
				<Output>
					<TypeIdentifier>(0x6f752dd0, 0x082a321e)</TypeIdentifier>
					<Name>Output Stimulations</Name>
				</Output>
			</Outputs>
			<Settings>
				<Setting>
					<TypeIdentifier>(0x007deef9, 0x2f3e95c6)</TypeIdentifier>
					<Name>Timeout delay</Name>
					<DefaultValue>5</DefaultValue>
					<Value>3</Value>
					<Modifiability>false</Modifiability>
				</Setting>
				<Setting>
					<TypeIdentifier>(0x2c132d6e, 0x44ab0d97)</TypeIdentifier>
					<Name>Output Stimulation</Name>
					<DefaultValue>OVTK_StimulationId_Label_00</DefaultValue>
					<Value>OVTK_StimulationId_Label_00</Value>
					<Modifiability>false</Modifiability>
				</Setting>
			</Settings>
			<Attributes>
				<Attribute>
					<Identifier>(0x1fa7a38f, 0x54edbe0b)</Identifier>
					<Value>480</Value>
				</Attribute>
				<Attribute>
					<Identifier>(0x207c9054, 0x3c841b63)</Identifier>
					<Value>1216</Value>
				</Attribute>
				<Attribute>
					<Identifier>(0x4e7b798a, 0x183beafb)</Identifier>
					<Value>(0x1eaee00e, 0xdb05d34e)</Value>
				</Attribute>
				<Attribute>
					<Identifier>(0xc80ce8af, 0xf699f813)</Identifier>
					<Value>1</Value>
				</Attribute>
				<Attribute>
					<Identifier>(0xce18836a, 0x9c0eb403)</Identifier>
					<Value>2</Value>
				</Attribute>
				<Attribute>
					<Identifier>(0xcfad85b0, 0x7c6d841c)</Identifier>
					<Value>1</Value>
				</Attribute>
			</Attributes>
		</Box>
		<Box>
			<Identifier>(0x000074d1, 0x00004cc9)</Identifier>
			<Name>Stimulation listener</Name>
			<AlgorithmClassIdentifier>(0x65731e1d, 0x47de5276)</AlgorithmClassIdentifier>
			<Inputs>
				<Input>
					<TypeIdentifier>(0x6f752dd0, 0x082a321e)</TypeIdentifier>
					<Name>Stimulation stream 1</Name>
				</Input>
			</Inputs>
			<Settings>
				<Setting>
					<TypeIdentifier>(0xa88b3667, 0x0871638c)</TypeIdentifier>
					<Name>Log level to use</Name>
					<DefaultValue>Information</DefaultValue>
					<Value>Information</Value>
					<Modifiability>false</Modifiability>
				</Setting>
			</Settings>
			<Attributes>
				<Attribute>
					<Identifier>(0x1fa7a38f, 0x54edbe0b)</Identifier>
					<Value>624</Value>
				</Attribute>
				<Attribute>
					<Identifier>(0x207c9054, 0x3c841b63)</Identifier>
					<Value>992</Value>
				</Attribute>
				<Attribute>
					<Identifier>(0x4e7b798a, 0x183beafb)</Identifier>
					<Value>(0xf451ad91, 0x14c75f86)</Value>
				</Attribute>
				<Attribute>
					<Identifier>(0xce18836a, 0x9c0eb403)</Identifier>
					<Value>1</Value>
				</Attribute>
				<Attribute>
					<Identifier>(0xcfad85b0, 0x7c6d841c)</Identifier>
					<Value>1</Value>
				</Attribute>
				<Attribute>
					<Identifier>(0xfba64161, 0x65304e21)</Identifier>
					<Value></Value>
				</Attribute>
			</Attributes>
		</Box>
	</Boxes>
	<Links>
		<Link>
			<Identifier>(0x00001a0a, 0x00000328)</Identifier>
			<Source>
				<BoxIdentifier>(0x00005426, 0x00000594)</BoxIdentifier>
				<BoxOutputIndex>0</BoxOutputIndex>
			</Source>
			<Target>
				<BoxIdentifier>(0x000074d1, 0x00004cc9)</BoxIdentifier>
				<BoxInputIndex>0</BoxInputIndex>
			</Target>
		</Link>
		<Link>
			<Identifier>(0x00005109, 0x00004361)</Identifier>
			<Source>
				<BoxIdentifier>(0x00006d4d, 0x00002b7a)</BoxIdentifier>
				<BoxOutputIndex>0</BoxOutputIndex>
			</Source>
			<Target>
				<BoxIdentifier>(0x000050a2, 0x00006fea)</BoxIdentifier>
				<BoxInputIndex>0</BoxInputIndex>
			</Target>
		</Link>
		<Link>
			<Identifier>(0x00006795, 0x000051bd)</Identifier>
			<Source>
				<BoxIdentifier>(0x000046ff, 0x00004b05)</BoxIdentifier>
				<BoxOutputIndex>0</BoxOutputIndex>
			</Source>
			<Target>
				<BoxIdentifier>(0x00005426, 0x00000594)</BoxIdentifier>
				<BoxInputIndex>1</BoxInputIndex>
			</Target>
		</Link>
		<Link>
			<Identifier>(0x00006f24, 0x0000593d)</Identifier>
			<Source>
				<BoxIdentifier>(0x000046ff, 0x00004b04)</BoxIdentifier>
				<BoxOutputIndex>0</BoxOutputIndex>
			</Source>
			<Target>
				<BoxIdentifier>(0x00005426, 0x00000594)</BoxIdentifier>
				<BoxInputIndex>0</BoxInputIndex>
			</Target>
		</Link>
	</Links>
	<Comments></Comments>
	<Metadata>
		<Entry>
			<Identifier>(0x0000659a, 0x00007c80)</Identifier>
			<Type>(0x3bcce5d2, 0x43f2d968)</Type>
			<Data>[{"boxIdentifier":"(0xffffffff, 0xffffffff)","childCount":1,"height":320,"identifier":"(0x0000529f, 0x00003113)","name":"Default window","parentIdentifier":"(0xffffffff, 0xffffffff)","type":1,"width":480},{"boxIdentifier":"(0xffffffff, 0xffffffff)","childCount":1,"identifier":"(0x00006575, 0x0000318a)","index":0,"name":"Default tab","parentIdentifier":"(0x0000529f, 0x00003113)","type":2},{"boxIdentifier":"(0xffffffff, 0xffffffff)","childCount":0,"identifier":"(0x00004845, 0x00002f1f)","index":0,"name":"Empty","parentIdentifier":"(0x00006575, 0x0000318a)","type":0}]</Data>
		</Entry>
	</Metadata>
</OpenViBE-Scenario>