OpenViBE-Scenario
Comment
  The Stream Switch box
  redirects the Streamed Matrix input on a particular output.

  The Stimulation input drives the switch according to
  the settings (one stimulation code per output).
Comment
  The Signal Display boxes display
  the simulated signal.
Comment
  You can browse each box' documentation by selecting the box and pressing F1

Keyboard stimulator => #0
  Filename = ${Path_Data}/plugins/stimulation/simple-keyboard-to-stimulations.txt
Sinus oscillator => #1
  Channel count = 4
  Sampling frequency = 512
  Generated epoch sample count = 32
Triggers=#0, Matrix=#1 -> Stream Switch => #2
  Default to output 1 = false
  Switch stim for output 1 = OVTK_StimulationId_Label_01
  Switch stim for output 2 = OVTK_StimulationId_Label_02
  Switch stim for output 3 = OVTK_StimulationId_Label_03
Matrix=#2.Output[0] -> Press 'a' to display here
  Channel Localisation = ${AdvancedViz_ChannelLocalisation}
  Temporal Coherence = Time Locked
  Time Scale = 20
  Matrix Count = 50
  Positive Data Only ? = false
  Gain = 1
  Caption =
  Translucency = 1
  Color = ${AdvancedViz_DefaultColor}
Matrix=#2.Output[1] -> Press 'z' to display here
  Channel Localisation = ${AdvancedViz_ChannelLocalisation}
  Temporal Coherence = Time Locked
  Time Scale = 20
  Matrix Count = 50
  Positive Data Only ? = false
  Gain = 1
  Caption =
  Translucency = 1
  Color = ${AdvancedViz_DefaultColor}
Matrix=#2.New output -> Press 'e' to display here
  Channel Localisation = ${AdvancedViz_ChannelLocalisation}
  Temporal Coherence = Time Locked
  Time Scale = 20
  Matrix Count = 50
  Positive Data Only ? = false
  Gain = 1
  Caption =
  Translucency = 1
  Color = ${AdvancedViz_DefaultColor}
